///////////////////////////////////////////////////////////////////////////////
// makeCell.hoc: builds the cell
///////////////////////////////////////////////////////////////////////////////

//////////////////// procedure definitions ////////////////////////////////////
// top level procedure for creating the cell
proc celldef() {
  // create the topology of the cell
  topol()
  
  // set the soma to be the distance origin
  distance()
  
  // determine the optimal number of segments for each section
  geom_nseg()
  
  // define different subsets of the sections
  subsets()
  
  
  // create the biophysical parameters
  biophys()
  
  

}

//////////////////// declarations /////////////////////////////////////////////
create soma, axon, dend[53], apic[38]


//-----------------------------------------------------------------------------
// topol()
//-----------------------------------------------------------------------------
// creates the cell's topology
proc topol() { local i
  connect axon(0), soma(0.5)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  for i = 4, 5 connect dend[i](0), dend[i-1](1)
  connect dend[6](0), dend[4](1)
  for i = 7, 8 connect dend[i](0), dend[6](1)
  connect dend[9](0), dend[3](1)
  connect dend[10](0), dend(1)
  for i = 11, 12 connect dend[i](0), dend[10](1)
  connect dend[13](0), soma(0.5)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), soma(0.5)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  connect dend[19](0), soma(0.5)
  for i = 20, 21 connect dend[i](0), dend[i-1](1)
  connect dend[22](0), dend[20](1)
  connect dend[23](0), dend[19](1)
  for i = 24, 25 connect dend[i](0), dend[i-1](1)
  connect dend[26](0), dend[24](1)
  connect dend[27](0), dend[23](1)
  connect dend[28](0), soma(0.5)
  for i = 29, 30 connect dend[i](0), dend[i-1](1)
  connect dend[31](0), dend[29](1)
  connect dend[32](0), dend[28](1)
  for i = 33, 34 connect dend[i](0), dend[32](1)
  for i = 35, 36 connect dend[i](0), dend[34](1)
  connect dend[37](0), soma(0.5)
  for i = 38, 41 connect dend[i](0), dend[i-1](1)
  connect dend[42](0), dend[40](1)
  connect dend[43](0), dend[39](1)
  connect dend[44](0), dend[38](1)
  connect dend[45](0), dend[37](1)
  for i = 46, 47 connect dend[i](0), dend[45](1)
  for i = 48, 49 connect dend[i](0), dend[47](1)
  connect dend[50](0), apic[3](1)
  for i = 51, 52 connect dend[i](0), dend[50](1)
  connect apic(0), soma(0.5)
  for i = 1, 4 connect apic[i](0), apic[i-1](1)
  connect apic[5](0), apic[2](1)
  connect apic[6](0), apic[1](1)
  for i = 7, 9 connect apic[i](0), apic[i-1](1)
  connect apic[10](0), apic[8](1)
  connect apic[11](0), apic[7](1)
  for i = 12, 13 connect apic[i](0), apic[i-1](1)
  connect apic[14](0), apic[12](1)
  connect apic[15](0), apic[11](1)
  for i = 16, 17 connect apic[i](0), apic[i-1](1)
  connect apic[18](0), apic[16](1)
  connect apic[19](0), apic[15](1)
  for i = 20, 22 connect apic[i](0), apic[i-1](1)
  connect apic[23](0), apic[21](1)
  connect apic[24](0), apic[20](1)
  for i = 25, 26 connect apic[i](0), apic[24](1)
  for i = 27, 28 connect apic[i](0), apic[26](1)
  connect apic[29](0), apic[19](1)
  connect apic[30](0), apic[6](1)
  connect apic[31](0), apic(1)
  for i = 32, 33 connect apic[i](0), apic[31](1)
  for i = 34, 35 connect apic[i](0), apic[33](1)
  for i = 36, 37 connect apic[i](0), apic[35](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(416.297, 235.55, 34.16, 12.8218)
	pt3dadd(422.708, 235.55, 34.16, 12.8218)
	pt3dadd(429.119, 235.55, 34.16, 12.8218)
  }
  axon {pt3dclear()
	pt3dstyle(1, 422.708, 235.55, 34.16)
	pt3dadd(418.916, 240.4, 33.4104, 0.3438)
	pt3dadd(418.059, 241.156, 33.3721, 0.483)
	pt3dadd(417.201, 241.914, 33.3334, 0.6218)
	pt3dadd(416.343, 242.67, 33.2948, 0.761)
	pt3dadd(415.485, 243.427, 33.2564, 0.8998)
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  }
}
proc shape3d_2() {
  dend[9] {	pt3dadd(384.789, 171.684, 25.2731, 0.7632)
	pt3dadd(384.208, 170.708, 25.2806, 0.613)
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  }
}
proc shape3d_3() {
  dend[15] {	pt3dadd(410.196, 252.887, 19.787, 0.3324)
	pt3dadd(410.767, 253.842, 19.3082, 0.337)
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  }
}
proc shape3d_4() {
  dend[21] {	pt3dadd(381.895, 235.449, 38.3396, 0.669)
	pt3dadd(380.855, 234.982, 38.3992, 0.616)
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  }
}
proc shape3d_5() {
  dend[26] {	pt3dadd(440.901, 288.922, 44.6774, 0.4136)
	pt3dadd(441.29, 289.994, 44.8787, 0.3696)
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  }
}
proc shape3d_6() {
  dend[31] {	pt3dadd(488.972, 303.171, 35.0106, 0.285)
	pt3dadd(489.188, 304.286, 35.1394, 0.2942)
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  }
}
proc shape3d_7() {
  dend[41] {	pt3dadd(489.815, 190.667, 24.764, 0.3988)
	pt3dadd(489.849, 189.548, 25.0032, 0.4404)
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  }
}
proc shape3d_8() {
  dend[46] {	pt3dadd(453.566, 256.643, 29.0251, 0.7844)
	pt3dadd(454.089, 257.656, 28.8254, 0.7252)
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  }
}
proc shape3d_9() {
  apic {	pt3dadd(427.935, 229.923, 38.1828, 1.6016)
	pt3dadd(428.294, 228.867, 38.8139, 1.6016)
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  }
}
proc shape3d_10() {
  apic[4] {	pt3dadd(445.211, 256.575, 72.749, 0.3686)
	pt3dadd(444.276, 257.233, 72.8115, 0.3356)
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  }
}
proc shape3d_11() {
  apic[10] {	pt3dadd(523.983, 226.916, 25.3543, 0.6762)
	pt3dadd(525.115, 226.934, 25.3369, 0.5944)
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  }
}
proc shape3d_12() {
  apic[15] {	pt3dadd(472.91, 201.774, 44.4906, 0.858)
	pt3dadd(473.679, 200.934, 44.7146, 0.7786)
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  }
}
proc shape3d_13() {
  apic[20] {	pt3dadd(507.915, 191.383, 52.558, 0.5854)
	pt3dadd(508.963, 190.943, 52.6952, 0.6162)
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  }
}
proc shape3d_14() {
  apic[23] {	pt3dadd(562.951, 181.003, 77.0042, 0.656)
	pt3dadd(562.768, 179.892, 77.3352, 0.6962)
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  }
}
proc shape3d_15() {
  apic[27] {	pt3dadd(617.031, 203.789, 58.7863, 0.5492)
	pt3dadd(617.671, 204.736, 58.9487, 0.5492)
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  }
}
proc shape3d_16() {
  apic[29] {	pt3dadd(502.377, 164.631, 75.7946, 0.3088)
	pt3dadd(502.997, 163.685, 76.0046, 0.35)
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  }
}
proc shape3d_17() {
  apic[32] {	pt3dadd(421.405, 194.912, 39.6155, 0.807)
	pt3dadd(420.318, 194.575, 39.7132, 0.977)
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  }
}
proc shape3d_18() {
  apic[37] {	pt3dadd(404.246, 157.739, 27.3854, 0.5562)
	pt3dadd(404.167, 156.602, 27.2471, 0.5716)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
}

objref all, somatic, axonal, basal, apical
proc subsets() { local i
  objref all, somatic, axonal, basal, apical
  all = new SectionList()
    soma all.append()
    axon all.append()
    for i=0, 52 dend[i] all.append()
    for i=0, 37 apic[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 52 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 37 apic[i] apical.append()

}


//-----------------------------------------------------------------------------
// geom_nseg()
//-----------------------------------------------------------------------------
// set the number of segments for each section (10 times electrical limit)
proc geom_nseg() {

  // for calculating segment numbers
  freq = 100      // Hz, frequency at which AC length constant will be computed
  d_lambda = 0.1

  forall {

    nseg  = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*20 + 11
  }
}

//-----------------------------------------------------------------------------
// biophys()
//-----------------------------------------------------------------------------
// sets the biophysics of the segments (capacitance and axial resistance)
proc biophys() {
  forsec all {
    Ra = Ra_glob 		
    cm = Cm_glob		
    insert pas
      g_pas = g_pas_glob	
      e_pas = e_pas_glob		
  }
}

//////////////////// procedure calls /////////////////////////////////////

// set access to the soma
access soma

// define the cell
celldef()
