///////////////////////////////////////////////////////////////////////////////
// mosinit.hoc: this is the high-level script; to run the simulation type
//              'nrngui mosinit.hoc' at the command 
///////////////////////////////////////////////////////////////////////////////


//////////////////// load nrngui //////////////////////////////////////////////
load_file("nrngui.hoc")


//////////////////// model scripts ////////////////////////////////////////////
xopen("setParameters.hoc")
xopen("makeCell.hoc")
xopen("makePointProcesses.hoc")

//////////////////// interface scripts ////////////////////////////////////////////
xopen("makeWindows.ses")

//////////////////// record data ////////////////////////////////////////////
xopen("recordData.hoc")
